PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = MemoryRecallTask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    TextComponent Instruction
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        You will see a series of words appear on the screen, one at a time.
        Try to remember as many as you can.
        Afterward, you will be asked to recall the words.


        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Wordpresentation
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    TextComponent WordStim
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $word
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  Routine Recallphase
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    TextComponent Recallbox
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
         Type the words you remember in the text box below.


        Press ENTER when you're done.
    KeyboardComponent key_resp_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ConfidenceRating
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    TextComponent confidencetext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        On a scale from 1 to 5, how confident are you in the words you remembered?

        Use the slider below to rate your confidence.
    KeyboardComponent SubmitConfidence
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/SB Info/Documents/wordlist.xlsx
    loopType = sequential
    nReps = 5
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    conditions:
      [{'word': 'dog '},
      {'word': 'chair'},
      {'word': 'table'},
      {'word': 'shoes'},
      {'word': 'bottle'},
      {'word': 'bag'},
      {'word': 'board'},
      {'word': 'tiffin'},
      {'word': 'aeroplane'},
      {'word': 'laptop'}]
    Routine Wordpresentation
  LoopTerminator trials
  Routine Recallphase
  Routine ConfidenceRating
